CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C0")
    Name to assign these images:Original_C0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Original_C1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Original_C2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies nuclei from the original images']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
    Select the input image:Original_C0
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureImageIntensity:[module_num:6|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notes:['Measures the image intensity of original image C1 (myosin)']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
    Select images to measure:Original_C1
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identifies myosin using the previously measured C1 image intensity as the threshold. This was the only way I could get it to work.']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
    Select the input image:Original_C1
    Name the primary objects to be identified:Myosin
    Typical diameter of objects, in pixel units (Min,Max):50,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0
    Threshold correction factor:1.17
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_UpperQuartileIntensity_Original_C1
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
MeasureImageIntensity:[module_num:8|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notes:['Measures the image intensity of original image C2 (actin)']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
    Select images to measure:Original_C2
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Identifies Actin using the previously measured intensity of C2 to set the threshold.']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
    Select the input image:Original_C2
    Name the primary objects to be identified:Actin
    Typical diameter of objects, in pixel units (Min,Max):50,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_UpperQuartileIntensity_Original_C2
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
MeasureColocalization:[module_num:10|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notes:['Measures colocalization of actin (C2) and myosin (C1)']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
    Select images to measure:Original_C1, Original_C2
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Actin, Myosin
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectSizeShape:[module_num:11|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notes:['Measures sizes and shapes of Actin, Myosin, and Nuclei objects.']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
    Select object sets to measure:Actin, Myosin, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

GrayToColor:[module_num:12|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notes:['Creates a composite image using Myosin (C1) as the red channel, Nuclei (C0) as the green channel, and Actin (C2) as the blue channel.', 'Actin and myosin should appear purple where they are colocalizing. ', 'This is the final image submitted with the rest of the homework materials. ']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:Composite
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    Hidden:3
    Image name:Original_C1
    Color:#ff0000
    Weight:1.0
    Image name:Original_C0
    Color:#00ff00
    Weight:1.0
    Image name:Original_C2
    Color:#0000ff
    Weight:1.0

SaveImages:[module_num:13|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notes:['Saves the composite image as an 8-bit TIF. ']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
    Select the type of image to save:Image
    Select the image to save:Composite
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Composite
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\CM515\\CM515-course-2024\\modules\\10_Image_Analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:14|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notes:['Saves a selected series of data to a comma sperated spreadsheet. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\CM515\\CM515-course-2024\\modules\\10_Image_Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Actin|Correlation_Manders_Original_C1_Original_C2,Actin|Correlation_Manders_Original_C2_Original_C1,Actin|Correlation_Overlap_Original_C1_Original_C2,Actin|Correlation_K_Original_C2_Original_C1,Actin|Correlation_K_Original_C1_Original_C2,Actin|Correlation_RWC_Original_C2_Original_C1,Actin|Correlation_RWC_Original_C1_Original_C2,Actin|Correlation_Costes_Original_C2_Original_C1,Actin|Correlation_Costes_Original_C1_Original_C2,Actin|Correlation_Correlation_Original_C1_Original_C2,Actin|AreaShape_Compactness,Actin|AreaShape_Center_Y,Actin|AreaShape_Center_X,Actin|AreaShape_BoundingBoxArea,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Module_10_HW_
    Overwrite existing files without warning?:No
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